s:Ge/World/Type      = "TsBox"
d:Ge/World/HLX       = 20 mm
d:Ge/World/HLY       = 20 mm
d:Ge/World/HLZ       = 20 mm
s:Ge/World/Material  = "G4_WATER"

s:Ge/Seed/Type       = "TsSphere"
s:Ge/Seed/Parent     = "World"
s:Ge/Seed/Material   = "G4_WATER"
d:Ge/Seed/RMax       = 1 mm

sv:Ph/Default/Modules = 1 "g4em-standard_opt4"

s:So/ChainSource/Type                                 = "RadioactiveTimeSource"
s:So/ChainSource/Mode                                 = "uniform"
s:So/ChainSource/Component                            = "Seed"
s:So/ChainSource/BeamParticle                         = "GenericIon(82, 212)"
b:So/ChainSource/CorrectByNumberOfHistories          = "True"
b:So/ChainSource/RecursivelyIncludeChildren           = "True"
b:So/ChainSource/TreatAdditionalDecaysAsNewHistories = "True"
b:So/ChainSource/IncludeWholeDecayChain              = "True"
b:So/ChainSource/WriteRunMetadata                     = "True"
s:So/ChainSource/RunMetadataFileName                  = "run_metadata_uniform.json"
u:So/ChainSource/InitialActivity                      = 1 * MBq
i:So/ChainSource/NumberOfHistoriesInRun               = 200

d:hour                       = 3600.0 s
d:Tf/TimelineStart           = 0 * hour s
d:Tf/TimelineEnd             = 4 * hour s
i:Tf/NumberOfSequentialTimes = 2

i:Ts/NumberOfThreads = 1
i:Ts/Seed            = 11

u:MBq = 1000000
